// Parameter file for B-Spline registration
// as used in: Artaechevarria X, Munoz-Barrutia A, Ortiz-de-Solorzano C., 
// "Combination strategies in multi-atlas image segmentation: application to brain MR data,"
// IEEE Trans Med Imaging. 2009 Aug;28(8):1266-77.

// The internal pixel type, used for computations
// Leave to float in general
(FixedInternalImagePixelType "float")
(MovingInternalImagePixelType "float")

// The dimensions of the fixed and moving image
(FixedImageDimension 3)
(MovingImageDimension 3)

//Components

// The following components should be left as they are:
(UseDirectionCosines "true")
(Registration "MultiMetricMultiResolutionRegistration")
(FixedImagePyramid "FixedRecursiveImagePyramid" "FixedRecursiveImagePyramid" "FixedRecursiveImagePyramid")

(MovingImagePyramid "MovingRecursiveImagePyramid" "MovingRecursiveImagePyramid" "MovingRecursiveImagePyramid")

(Interpolator "BSplineInterpolatorFloat" "BSplineInterpolatorFloat" "BSplineInterpolatorFloat")
(ResampleInterpolator "FinalBSplineInterpolatorFloat")
(Resampler "DefaultResampler")

// You may change these:
// The optimizer StandardGradientDescent works quite ok 
// in general. The Transform and Metric are important and
// need to be chosen careful for each application.
(Optimizer "AdaptiveStochasticGradientDescent")
(Transform "AffineTransform")
(Metric "AdvancedMattesMutualInformation" "AdvancedMattesMutualInformation" "AdvancedMattesMutualInformation")

(AutomaticTransformInitialization "true")
(AutomaticScalesEstimation "true")
(AutomaticTransformInitializationMethod " Origins")


// The number of resolutions. 1 Is only enough if the expected
// deformations are small. 3 or 4 mostly works fine.
(NumberOfResolutions 4)
(ImagePyramidSchedule 8 8 8  4 4 4  2 2 2  1 1 1 )



// If you use a mask, this option is important. You can 
// set it for each resolution differently.
// If the mask serves as region of interest, set it to false.
// If the mask indicates which pixels are valid, then set it to true.
// If you do not use a mask, the option doesn't matter.
(ErodeMask "false" "false" "false")

// Whether transforms are combined by composition or by addition.
// In generally, Compose is the best option in most cases.
// It does not influence the results very much.
(HowToCombineTransforms "Compose")
(UseFastAndLowMemoryVersion "true")

// This is an important option. It defines the complexity of
// the deformation field.
// Final spacing of B-Spline grid (unit = size of 1 voxel)
// You can give it for each dimension differently, or for 
// all dimensions the same.



// Number of spatial samples used to compute the mutual
// information in each resolution level.
(NumberOfSpatialSamples 3000 3000 3000)


// Refresh these spatial samples in every iteration, and select
// them randomly.
(NewSamplesEveryIteration "true" "true" "true")
(ImageSampler "Random" "Random" "Random")

//Number of grey level bins in each resolution level,
// for the mutual information. 16 or 32 usually works fine.
(NumberOfHistogramBins 32 32 32)

//Order of B-Spline interpolation used in each resolution level:
(BSplineInterpolationOrder 3)

//Order of B-Spline interpolation used for applying the final deformation:
(FinalBSplineInterpolationOrder 0)

//Default pixel value for pixels that come from outside the picture:


// The following parameters are for the QuasiNewtonLBFGS
// optimizer.

//MaximumNumberOfIterations: The maximum number of iterations in each resolution.
(MaximumNumberOfIterations 500)

(Metric0Weight 0.125)
(Metric1Weight 0.225)
(Metric2Weight 0.125)

(DefaultPixelValue 0)
(WriteResultImage "true")
(WriteTransformParametersEachIteration "false")
(WriteTransformParametersEachResolution "false")
(ShowMetricValue "false")
(ShowExactMetricValue "false" "false" "false" "false")
(WriteResultImageAfterEachResolution "false")
(ResultImagePixelType "unsigned short")
(ResultImageFormat "tif")
